PsychoPy2experiment version="2021.1.4"
Settings
  Enable Escape = False
  Experiment info = {'participant': '', 'sex': '', 'age': '', 'psychology': '', 'sona': '', 'covid': '', 'vision': '', 'handedness': '', 'language': '', 'notes': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = exp
  logging level = debug
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Routines
  Routine fixpoint
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random
        fixtime = random.randint(10,15)/10
      End Routine:
        thisExp.addData('fixtime', fixtime)
    TextComponent fixcross
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixtime
      text = +
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  Routine koniec
    TextComponent podziekowania
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Dziękujemy za udział w badaniu i poświęcony czas.

        W przypadku pytań lub wątpliwości, a także aby zapoznać się z wynikami zbiorczymi,
        prosimy o kontakt z osobą odpowiedzialną za projekt - dr Joanną Sweklej,
        pisząc wiadomość na adres: jsweklej@swps.edu.pl.

        Miłego dnia :)

        Aby zakończyć badanie i zapisać odpowiedzi wciśnij [enter].
    KeyboardComponent end_space
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine odp
    CodeComponent code_odp
      Code Type = Auto->JS
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      Begin Experiment:
        pos_l1r = [0,0]
        pos_l2r = [0,0]
        pos_l3r = [0,0]
        pos_p1r = [0,0]
        pos_p2r = [0,0]
        pos_p3r = [0,0]
      Begin Routine:
        solution = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=None, borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )

        if tri_resp.keys == 'q':
            pos_l1r = [0, 0.6]
            pos_l2r = [0, 0.4]
            pos_l3r = [0, 0.2]
            pos_p1r = [2, 0.6]
            pos_p2r = [2, 0.4]
            pos_p3r = [2, 0.2]

        else:
            pos_l1r = [2, 0.6]
            pos_l2r = [2, 0.4]
            pos_l3r = [2, 0.2]
            pos_p1r = [0, 0.6]
            pos_p2r = [0, 0.4]
            pos_p3r = [0, 0.2]
      Each Frame:
        if tri_resp.keys is not None and len(tri_resp.keys)>0 :
                trials.finished=0
        else:
            continueRoutine = False
      End Routine:
        k += 1
    TextComponent pytanie
      color = black
      letterHeight = 0.06
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      wrapWidth = 1.5
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      text:
        Jakie jest rozwiązanie wskazanego tribonda?

        Wpisz odpowiedź w okienko poniżej. Jeśli nie znasz odpowiedzi, wpisz '?'.
        Następnie wciśnij [enter].
    TextComponent l1r
      color = black
      letterHeight = 0.1
      pos [set every repeat] = pos_l1r
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $tl[0]
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    TextComponent l2r
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = pos_l2r
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $tl[1]
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    TextComponent l3r
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = pos_l3r
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $tl[2]
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    TextComponent p1r
      color = black
      letterHeight = 0.1
      pos [set every repeat] = pos_p1r
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $tp[0]
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    TextComponent p2r
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = pos_p2r
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $tp[1]
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    TextComponent p3r
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = pos_p3r
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $tp[2]
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    TextboxComponent solution
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent odp_return
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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  Routine likert2
    CodeComponent codeocena_2
      Code Type = Auto->JS
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      Begin Routine:
        ocena_2 = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=(0.1, 0.1), borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
      Each Frame:
        if tri_resp.keys is not None and len(tri_resp.keys)>0 :
                trials.finished=0
        else:
            continueRoutine = False
    TextComponent text_3
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Oceń pewność z jaką podałeś/aś rozwiązanie tribonda
        wpisując wybraną wartość na klawiaturze, a następnie wciśnij [enter].
    ImageComponent skala_2
      image = skala.png
      pos = 0, -0.15
      saveStartStop = False
      startVal [time (s)] = 0
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    TextboxComponent ocena_2
      bold = False
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent text_3b
      color = black
      letterHeight = 0.06
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jeśli w poprzednim oknie wpisałeś/aś znak '?',
        pomiń ten punkt wciskając [enter].
    KeyboardComponent likert_return2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr0
    TextComponent instr_0
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Celem badania, do którego Cię zapraszamy,
        jest określenie wpływu sposobu prezentacji słów
        na efektywność rozwiązywania zagadek językowych.

        Całe badanie potrwa około 15 minut, w zależności od tempa pracy.

        Na ekranie monitora będziemy prezentowali pary zestawów złożonych z trzech słów.
        Jeden zestaw to rozwiązywalny tribond, czyli trzy słowa, które mają wspólne skojarzenie, np.:

        matematyka
        wóz
        rondo

        rozwiązanie: koło.

        Drugi zestaw zawiera słowa, które nie mają wspólnego skojarzenia.

        Kolejno zaprezentujemy 21 par zestawów słów w losowej konfiguracji
        w dwóch kolorach - czarnym i szarym. W przypadku każdej pary należy wskazać,
        który z prezentowanych zestawów jest rozwiązywalny, a następnie ocenić pewność wskazania
        oraz podać rozwiązanie (jeśli znasz) i ocenić, na ile jesteś go pewna/y.

        Zanim przejdziesz do właściwej części badania,
        na kolejnych stronach zobaczysz szczegółową instrukcję postępowania.

        Aby przejść dalej, wciśnij [enter].
    KeyboardComponent instr_return
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr1
    TextComponent instr_1a
      color = black
      letterHeight = 0.06
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        W badaniu zobaczysz zestawy par słów, zaprezentowanych jak poniżej.
        W każdej parze kolory słów przydzielane będą losowo.
        Twoim zadaniem będzie zidentyfikowanie rozwiązywalnego zestawu i wskazanie go
        poprzez wciśnięcie odpowiedniego przycisku:
        [q] - jeśli lewy, [p] - jeśli prawy.
    TextComponent I1t
      color = #e6e6e6
      letterHeight = 0.1
      pos = (-.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = matematyka
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    TextComponent I2t
      color = #e6e6e6
      letterHeight = 0.1
      pos = (-.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = wóz
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    TextComponent I3t
      color = #e6e6e6
      letterHeight = 0.1
      pos = (-.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rondo
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    TextComponent p4t
      color = black
      letterHeight = 0.1
      pos = (.3, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = łyżka
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    TextComponent p5t
      color = black
      letterHeight = 0.1
      pos = (.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = żaba
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    TextComponent p6t
      color = black
      letterHeight = 0.1
      pos = (.3, -.2 )
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = książka
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    TextComponent instr_1b
      color = black
      letterHeight = 0.06
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Na udzielenie odpowiedzi masz 10 sekund.

        W przypadku, gdy w ciągu 10 sekund nie udzielisz odpowiedzi, na ekranie pojawią się kolejne zestawy słów.

        W celach treningowych spróbuj zdecydować, który tribond ma rozwiązanie poprzez wciśnięcie odpowiedniego przycisku [q] lub [p].
    KeyboardComponent instr_odp
      allowedKeys = 'q','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    CodeComponent codeocena_1t
      Code Type = Auto->JS
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      Begin Routine:
        ocena_1t = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=(0.1, 0.1), borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
    TextComponent instr_2a
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Następnie zostaniesz poproszony/a o ocenę pewności
        z jaką dokonałeś/aś wyboru rozwiązywalnego zestawu słów.

        Udziel odpowiedzi korzystając z poniższej skali,
        od 0 - całkowity brak pewności do 10 - całkowita pewność.
    ImageComponent skala_1t
      image = skala.png
      pos = 0, -0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent ocena_1t
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = 0, -0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instr_2b
      color = black
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Korzystając z klawiatury wpisz cyfrę
        oznaczającą ocenę pewności dokonanego wyboru.

        Aby przejść dalej, wciśnij [enter].
    KeyboardComponent instr_return2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr3
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        textbox_t = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=None, borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
    TextComponent l1tr
      color = black
      letterHeight = 0.1
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = matematyka
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    TextComponent l2tr
      color = black
      letterHeight = 0.1
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = wóz
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    TextComponent l3tr
      color = black
      letterHeight = 0.1
      pos [set every repeat] = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rondo
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    TextComponent instr_3a
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        W następnym kroku należy podać rozwiązanie zestawu słów,
        który wcześniej wskazałeś/aś jako rozwiązywalny.

        Na udzielenie odpowiedzi masz 30 sekund.

        Wpisz w okno jego rozwiązanie.
        Jeśli go nie znasz, wpisz znak '?'.
    TextboxComponent textbox_t
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instr_3b
      color = black
      letterHeight = 0.06
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        W przypadku, gdy w ciągu 30 sekund nie udzielisz odpowiedzi,
        na ekranie pojawią się kolejne zestawy słów.
        Aby przejść dalej, wciśnij [enter].
    KeyboardComponent instr_return3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr4
    CodeComponent codeocena_2t
      Code Type = Auto->JS
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      Begin Routine:
        ocena_2t = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=(0.1, 0.1), borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
    TextComponent instr_4a
      color = black
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Następnie zostaniesz poproszony/a o ocenę pewności poprawności,
        z jaką podałeś/aś rozwiązanie zestawu słów.

        Udziel odpowiedzi korzystając z poniższej skali,
        od 0 - całkowity brak pewności,
        do 10 - całkowita pewność.

        Jeśli nie podałeś/aś odpowiedzi i wpisałeś/aś znak '?',
        możesz pominąć ten punkt badania, wciskając [enter].
    TextboxComponent ocena_2t
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent skala_2t
      image = skala.png
      pos = 0, -0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instr_4b
      color = black
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Korzystając z klawiatury wpisz cyfrę
        oznaczającą ocenę pewności dokonanego wyboru.

        Aby przejść dalej, wciśnij [enter].
    KeyboardComponent instr_return4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prep
    TextComponent przygotuj
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Przygotuj się i połóż rękę na myszce.
      wrapWidth = 1.5
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  Routine prep_2
    TextComponent text_5
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      wrapWidth = 1.5
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      text:
        Przygotuj się i połóż palce na klawiszach q i p.
  Routine instr5
    CodeComponent code_4
      Code Type = Auto->JS
    TextComponent instr_5
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Jeśli masz jakieś pytania lub wątpliwości dotyczące zadania,
        zwróć się teraz do osoby prowadzącej badanie.

        Jeżeli wszystko jest dla Ciebie jasne i jesteś gotowy/a, aby rozpocząć badanie, wciśnij [enter].
    KeyboardComponent instr_return5
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine likert1
    CodeComponent codeocena_1
      Code Type = Auto->JS
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      Begin Routine:
        ocena_1 = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=(0.1, 0.1), borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
      Each Frame:
        if tri_resp.keys is not None and len(tri_resp.keys)>0 :
                trials.finished=0
        else:
            continueRoutine = False
    TextComponent text_1
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Oceń pewność z jaką wskazałeś/aś rozwiązywalny tribond
        wpisując wybraną wartość na klawiaturze, a następnie wciśnij [enter].
    ImageComponent skala_1
      image = skala.png
      pos = 0, -0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent ocena_1
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent likert_return1
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tlo
    TextComponent text_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine io
    CodeComponent code_ET2
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        from psychopy.data import getDateStr

        # IOHUB
        eyetracker = None

        iohub_config={'eyetracker.hw.gazepoint.gp3.EyeTracker':
                       {'name':'tracker',
                        'device_timer':{'interval':0.005}
                       },
                       'experiment_code':getDateStr(),
                       'session_code':getDateStr(),
                       'experiment_info':{'title': str(expInfo['participant'])},
                       'session_info':{'name': str(expInfo['participant'])},
                       'datastore_name':str('et_data')
        #               'datastore_name':str(expInfo['participant'])
                      }

        print("iohub_config: ", iohub_config)

        from psychopy.iohub.client import launchHubServer
        from psychopy.core import getTime, wait

        io = launchHubServer(**iohub_config)

        iokeyboard = io.devices.keyboard
        mouse = io.devices.mouse
        eyetracker = io.devices.tracker
      End Experiment:
        if eyetracker:
            eyetracker.setConnectionState(False)
            io.quit()
  Routine calib_instr
    TextComponent text_calib_instr
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Zanim rozpoczniemy główne zadanie, skalibrujemy okulograf.

        Na ekranie pojawi się kropka, która będzie się przemieszczać.

        Podążaj za nią wzrokiem. Zatrzymaj wzrok na niej zawsze kiedy się zatrzyma.
        Patrz na nią, dopóki nie zniknie z ekranu.

        Staraj się nie poruszać głową, a jedynie śledzić kropkę wzrokiem.

        Jeśli jesteś gotowy/a, naciśnij [enter].
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine calib_cont
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # using something reasonable as a timeout actually makes more sense
        timeout = 10

        ave_error = 0.0
        valid_calib_points = 0

        calib_query = "Recalibrate (y/n)?"
      Begin Routine:
        ave_error = r['SUMMARY']['AVE_ERROR']
        valid_calib_points = r['SUMMARY']['VALID_POINTS']

        calib_query = "Average error is: %f\n\nValid points: %d\n\nRecalibrate (y/n)?" % (ave_error,valid_calib_points)
      End Routine:
        # calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
              calib_loop.finished = True

        thisExp.addData('ave_error',ave_error)
    TextComponent calib_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calib
    CodeComponent code_calib
      Code Type = Auto->JS
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      Begin Routine:
        win.winHandle.minimize() # minimize the PsychoPy window
        win.winHandle.set_fullscreen(False) # disable fullscreen
        win.flip() # redraw the (minimized) window

        r = eyetracker.runSetupProcedure()
        print("r: ", r)

        win.winHandle.maximize()
        win.winHandle.set_fullscreen(True)
        win.winHandle.activate()
        win.flip()
      End Routine:
        thisExp.addData('r',r)
  Routine valid_instr
    TextComponent text_2
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Za chwilę na ekranie zobaczysz 9 kropek.
        Przyjrzyj się po kolei każdej z nich, zaczynając od lewego górnego rogu
        w takiej kolejności, jakbyś czytał/a tekst.

        Zatrzymaj wzrok na każdej kropce przynajmniej na sekundę.

        Kiedy skończysz przyglądać się ostatniej kropce, naciśnij [enter].

        Żeby rozpocząć, wciśnij [enter].
    KeyboardComponent key_resp_valid
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine valid
    CodeComponent code_valid
      Code Type = Auto->JS
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      Begin Routine:
        #ioHub
        if eyetracker:
            io.clearEvents('all')
            eyetracker.setRecordingState(True)
            io.sendMessageEvent(text='%s' %('start:validation'), category = 'validation')
      End Routine:
        # IOHUB
        if eyetracker:
            eyetracker.setRecordingState(False)
            io.sendMessageEvent(text='%s' %('end:validation'), category = 'validation')
    ImageComponent grid
      image = grid\composite-1920x1080.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_grid
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine przygotowanie
    TextComponent przygotuj_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Zaraz przejdziesz do następnego zestawu.
        Połóż palce na klawiaturze i przygotuj się.
  Routine trial
    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import time

        def get_time():
            return time.strftime('%Y-%m-%d_%H-%M-%S', time.localtime())

        acc = 0
        k = 0

        #rozwiazywalne tribony
        tripoz = np.array([['poz01',"wygląd","magazyn","modelka"], ['poz02',"forma","energia","witaminy"], ['poz03',"graba","piątka","szufla"], ['poz04',"korona","sakiewka","euro"], ['poz05',"okulary","flaming","wypieki"], ['poz06',"kolor","pryzmat","woda"]])
        np.random.shuffle(tripoz)
        trineg = np.array([['neg01',"zakaz","mandat","kąt"], ['neg02',"zapach","śmieci","toaleta"], ['neg03',"wyrok","ściana","kat"], ['neg04',"woda","płuca","kamień"], ['neg05',"pająk","renta","czarny"], ['neg06',"napis","listopad","płyta"]])
        np.random.shuffle(trineg)
        trineu = np.array([['neu01',"klasa","kościół","park"], ['neu02',"wózek","maszyna","fura"], ['neu03',"lizak","rana","znaczek"], ['neu04',"jonowy","elektronowy","optyczny"], ['neu05',"golibroda","włosie","malarz"], ['neu06',"skala","legenda","poziomica"]])
        np.random.shuffle(trineu)
        triR = [np.array(tripoz), np.array(trineg), np.array(trineu)]
        np.random.shuffle(triR)
        triR = np.concatenate(triR)


        #nierozwiazywalne tribondy
        triNR = np.array([['n01',"mrówka","szalik","beczka"], ['n02',"toaleta","żagle","arlekin"], ['n03',"kubizm","polana","student"], ['n04',"chłodnik","dwójka","hieroglify"], ['n05',"uczeń","naród","łódź"], ['n06',"kurtka","widelec","huśtawka"], ['n07',"okno","tarta","suknia"], ['n08',"gazeta","banan","krab"], ['n09',"cyrylica","kiszka","zamkowy"], ['n10',"owoc","wydmy","obrane"], ['n11',"suma","pomidor","skrzynia"], ['n12',"próba","cukier","uszy"], ['n13',"dolar","jamnik","surrealizm"], ['n14',"drukarka","zagadka","mleko"],
        ['n15',"łyżka","rzymska","punktowy"], ['n16',"krowa","syrop","gapa"], ['n17',"krypton","klaun","skoki"], ['n18',"Buszmen","powieka","bitwa"]])
        np.random.shuffle(triNR)
      Begin Routine:
        #wez kolejny rozwiazywalny
        tr = triR[k]
        #wez kolejny nierozwiazywalny
        tnr = triNR[k]
        #polacz w jeden array
        tt = np.array([tr, tnr])
        print(tt)


        #tribond po lewej
        tl = tt[r]
        print(tl)
        #wez numer tribonda do trial ID
        tid_l = tl[0]
        print(tid_l)
        #wyrzuc numer z tribonda do wyswietlenia
        tl = tl[1:]
        print(tl)

        #tribond po prawej
        tp = tt[p]
        #wez numer tribonda do trial ID
        tid_p = tp[0]
        #wyrzuc numer z tribonda do wyswietlenia
        tp = tp[1:]

        #wyrzuc numer z poprawnego tribonda
        tr = tr[1:]

        #accuracy - sprawdz czy lewy czy prawy jest rozwiazywalny
        trl = np.array_equal(tr, tl)
        trp = np.array_equal(tr, tp)

        #trial ID
        trial_id = tid_l + '_' + tid_p
        print(trial_id)

        #ioHub
        if eyetracker:
            io.clearEvents('all')
            eyetracker.setRecordingState(True)
            io.sendMessageEvent(text='%s%s' %('start:',trial_id), category = 'trial')
      End Routine:
        if np.array_equal(tr, tp):
            if len(tri_resp.keys) == 0:
                acc = 9
            if tri_resp.keys == 'p':
                acc = 1
            if tri_resp.keys == 'q':
                acc = 0

        if np.array_equal(tr, tl):
            if len(tri_resp.keys) == 0:
                acc = 9
            if tri_resp.keys == 'q':
                acc = 1
            if tri_resp.keys == 'p':
                acc = 0

        thisExp.addData('trial_id', trial_id)
        thisExp.addData('tr', tr)
        thisExp.addData('tnr', tnr)
        thisExp.addData('tl', tl)
        thisExp.addData('tp', tp)
        thisExp.addData('trp', trp)
        thisExp.addData('trl', trl)
        thisExp.addData('acc', acc)
        thisExp.addData('kolor_l', kolor_l)
        thisExp.addData('kolor_p', kolor_p)

        # IOHUB

        if eyetracker:
            eyetracker.setRecordingState(False)
            io.sendMessageEvent(text='%s%s' %('end:',trial_id), category = 'trial')

        #io.clearEvents('all')
        #tracker.setRecordingState(False)
        #io.sendMessageEvent(trialID, category='end')
    TextComponent text
      color = black
      letterHeight = 0.06
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      wrapWidth = 1.5
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      text:
        Który zestaw słów ma rozwiązanie?
        lewy - wciśnij [q]         prawy - wciśnij [p]
    TextComponent l1
      color [set every repeat] = $kolor_l
      letterHeight = 0.1
      pos = (-.35, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $tl[0]
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    TextComponent l2
      color [set every repeat] = $kolor_l
      letterHeight = 0.1
      pos = (-.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $tl[1]
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    TextComponent l3
      color [set every repeat] = $kolor_l
      letterHeight = 0.1
      pos = (-.35, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $tl[2]
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    TextComponent p1
      color [set every repeat] = $kolor_p
      letterHeight = 0.1
      pos = (.35, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $tp[0]
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    TextComponent p2
      color [set every repeat] = $kolor_p
      letterHeight = 0.1
      pos = (.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $tp[1]
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    TextComponent p3
      color [set every repeat] = $kolor_p
      letterHeight = 0.1
      pos = (.35, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $tp[2]
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    KeyboardComponent tri_resp
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine training
  Routine training1
    CodeComponent code_prep
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import time

        def get_time():
            return time.strftime('%Y-%m-%d_%H-%M-%S', time.localtime())

        prep_trir = np.array([["piłka","gruszka","worek"],["medalion","sznycel","stek"], ["kazuar","emu","nandu"]])
        np.random.shuffle(prep_trir)

        #kolor
        colorprep = ['#e6e6e6', '#000000','#e6e6e6']

        prep_trinier = np.array([["mecz","stół","grabie"],["król","proszek","nowicjusz"], ["paw","zakupy","płytka"]])
        np.random.shuffle(prep_trinier)

        kprep = 0
        xprep = 0
      Begin Routine:
        #wez kolejny rozwiazywalny
        prep_tr = prep_trir[kprep]
        #wez kolejny nierozwiazywalny
        prep_tnr = prep_trinier[kprep]
        #polacz w jeden array
        prep_tt1 = np.array([prep_tnr, prep_tr])
        prep_tt2 = np.array([prep_tr, prep_tnr])
        #pomieszaj kolejnosc, ale tak, by było po równo prawo i lewo
        numprep = np.array([1, 2, 2])
        sprep = numprep[kprep]
        if sprep == 1:
            prep_tt = prep_tt1
        else:
            prep_tt = prep_tt2
        print (prep_tt)

        #tribond po lewej
        prep_tl = prep_tt[0]
        print(prep_tl)

        #pomieszaj wewnatrz tribonda
        np.random.shuffle(prep_tl)

        #tribond po prawej
        prep_tp = prep_tt[1]

        #pomieszaj wewnatrz tribonda
        np.random.shuffle(prep_tp)

        #accuracy - sprawdz czy lewy czy prawy jest rozwiazywalny
        prep_trl = np.array_equal(prep_tr, prep_tl)
        prep_trp = np.array_equal(prep_tr, prep_tp)

        #kolor

        colorprep_1 = colorprep[xprep]

        if colorprep_1 == '#e6e6e6':
            colorprep_2 = ('#000000')
        elif colorprep_1 == '#000000':
            colorprep_2 = ('#e6e6e6')

        if prep_trl == True:
            colorprep_l = colorprep_1
            colorprep_p = colorprep_2
        else:
            colorprep_l = colorprep_2
            colorprep_p = colorprep_1
    TextComponent text_6
      color = black
      letterHeight = 0.06
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 1.5
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      text:
        Który zestaw słów ma rozwiązanie?
        lewy - wciśnij [q]         prawy - wciśnij [p]
    TextComponent l1_2
      color [set every repeat] = $colorprep_l
      letterHeight = 0.1
      pos = (-.35, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prep_tl[0]
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    TextComponent l2_2
      color [set every repeat] = $colorprep_l
      letterHeight = 0.1
      pos = (-.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prep_tl[1]
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    TextComponent l3_2
      color [set every repeat] = $colorprep_l
      letterHeight = 0.1
      pos = (-.35, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prep_tl[2]
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    TextComponent p1_2
      color [set every repeat] = $colorprep_p
      letterHeight = 0.1
      pos = (.35, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prep_tp[0]
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    TextComponent p2_2
      color [set every repeat] = $colorprep_p
      letterHeight = 0.1
      pos = (.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prep_tp[1]
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    TextComponent p3_2
      color [set every repeat] = $colorprep_p
      letterHeight = 0.1
      pos = (.35, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prep_tp[2]
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    KeyboardComponent tri_resp_2
      allowedKeys = 'q','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = nothing
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  Routine training_likert1
    CodeComponent codeocena
      Code Type = Auto->JS
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      Begin Routine:
        ocena = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=(0.1, 0.1), borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
      Each Frame:
        if tri_resp_2.keys is not None and len(tri_resp_2.keys)>0 :
                trials_prep.finished=0
        else:
            continueRoutine = False
    TextComponent text_7
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Oceń pewność z jaką wskazałeś/aś rozwiązywalny tribond
        wpisując wybraną wartość na klawiaturze, a następnie wciśnij [enter].
    ImageComponent skala
      image = skala.png
      pos = 0, -0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent ocena
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent likert_return1_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training_odp
    CodeComponent code_odp_2
      Code Type = Auto->JS
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      Begin Experiment:
        l1r_2_pos = [0,0]
        l2r_2_pos = [0,0]
        l3r_2_pos = [0,0]
        p1r_2_pos = [0,0]
        p2r_2_pos = [0,0]
        p3r_2_pos = [0,0]
      Begin Routine:
        solution = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=None, borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )

        if tri_resp_2.keys == 'q':
            l1r_2_pos = [0, 0.6]
            l2r_2_pos = [0, 0.4]
            l3r_2_pos = [0, 0.2]
            p1r_2_pos = [2, 0.6]
            p2r_2_pos = [2, 0.4]
            p3r_2_pos = [2, 0.2]

        else:
            l1r_2_pos = [2, 0.6]
            l2r_2_pos = [2, 0.4]
            l3r_2_pos = [2, 0.2]
            p1r_2_pos = [0, 0.6]
            p2r_2_pos = [0, 0.4]
            p3r_2_pos = [0, 0.2]
      Each Frame:
        if tri_resp_2.keys is not None and len(tri_resp_2.keys)>0 :
                trials_prep.finished=0
        else:
            continueRoutine = False
      End Routine:
        kprep += 1
        xprep += 1
    TextComponent pytanie_2
      color = black
      letterHeight = 0.06
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      wrapWidth = 1.5
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      text:
        Jakie jest rozwiązanie wskazanego tribonda?

        Wpisz odpowiedź w okienko poniżej. Jeśli nie znasz odpowiedzi, wpisz '?'.
        Następnie wciśnij [enter].
    TextComponent l1r_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = l1r_2_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $prep_tl[0]
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    TextComponent l2r_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = l2r_2_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $prep_tl[1]
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    TextComponent l3r_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = l3r_2_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $prep_tl[2]
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    TextComponent p1r_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = p1r_2_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $prep_tp[0]
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    TextComponent p2r_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = p2r_2_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $prep_tp[1]
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    TextComponent p3r_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = p3r_2_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $prep_tp[2]
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    TextboxComponent solution_2
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent odp_return_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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  Routine training_likert2
    CodeComponent codeocena_3
      Code Type = Auto->JS
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      Begin Routine:
        ocena_3 = visual.TextBox2(
             win, text='', font='Open Sans',
             pos=(0, -0.5),     letterHeight=0.05,
             size=(0.1, 0.1), borderWidth=2.0,
             color='black', colorSpace='rgb',
             opacity=None,
             bold=False, italic=False,
             lineSpacing=1.0,
             padding=None,
             anchor='center',
             fillColor=None, borderColor='black',
             flipHoriz=False, flipVert=False,
             editable=True,
             name='textbox_t',
             autoLog=True,
        )
      Each Frame:
        if tri_resp_2.keys is not None and len(tri_resp_2.keys)>0 :
                trials_prep.finished=0
        else:
            continueRoutine = False
    TextComponent text_8
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Oceń pewność z jaką podałeś/aś rozwiązanie tribonda
        wpisując wybraną wartość na klawiaturze, a następnie wciśnij [enter].
    ImageComponent skala_3
      image = skala.png
      pos = 0, -0.15
      saveStartStop = False
      startVal [time (s)] = 0
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    TextboxComponent ocena_3
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_3b_2
      color = black
      letterHeight = 0.06
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jeśli w poprzednim oknie wpisałeś/aś znak '?',
        pomiń ten punkt wciskając [enter].
    KeyboardComponent likert_return2_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training_prep
    TextComponent przygotuj_text_2
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Zaraz przejdziesz do następnego zestawu.
        Połóż palce na klawiaturze i przygotuj się.
  Routine sam2_post
    ImageComponent image_3
      image = 2.png
      startVal [time (s)] = 0.0
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    SliderComponent sam_arousal_post
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.6, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine sam1_post
    ImageComponent image_4
      image = 1.png
      startVal [time (s)] = 0.0
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    SliderComponent sam_valence_post
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.6, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine sam_pre1
    TextComponent inst_pre1
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Używając cyfr od 1 do 5 wskaż
        która postać najlepiej
        odpowiada temu jak się teraz czujesz.
    ImageComponent sam_nast_pre
      image = nastroj.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent sam_nast_pre_rate
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.1, 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent sam_ret1
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine sam
    ImageComponent image_2
      image = 2.png
      startVal [time (s)] = 0.0
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    SliderComponent sam_arousal_pre
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.6, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine sam_pre2
    TextComponent inst_pre2
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Używając cyfr od 1 do 5 wskaż
        która postać najlepiej
        odpowiada temu jak się teraz czujesz.
    ImageComponent sam_pob_pre
      image = pobudzenie.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent sam_pob_pre_rate
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.1, 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent sam_ret2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine sam_post1
    TextComponent inst_post1
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Używając cyfr od 1 do 5 wskaż
        która postać najlepiej
        odpowiada temu jak się teraz czujesz.
    ImageComponent sam_nast_post
      image = nastroj.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent sam_nast_post_rate
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.1, 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent sam_ret3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine sam_post2
    TextComponent inst_post2
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Używając cyfr od 1 do 5 wskaż
        która postać najlepiej
        odpowiada temu jak się teraz czujesz.
    ImageComponent sam_pob_post
      image = pobudzenie.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent sam_pob_post_rate
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.1, 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent sam_ret4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine io
  Routine sam_pre1
  Routine sam_pre2
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = timeout
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    Routine calib
    Routine calib_cont
  LoopTerminator calib_loop
  Routine valid_instr
  Routine valid
  Routine instr0
  Routine instr1
  Routine instr2
  Routine instr3
  Routine instr4
  Routine instr5
  LoopInitiator trials_prep loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine training_prep
    Routine fixpoint
    Routine training1
    Routine training_likert1
    Routine training_odp
    Routine training_likert2
  LoopTerminator trials_prep
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond2.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'kolor_l': '#e6e6e6', 'kolor_p': '#000000', 'r': 0, 'p': 1},
      {'kolor_l': '#000000', 'kolor_p': '#e6e6e6', 'r': 0, 'p': 1},
      {'kolor_l': '#e6e6e6', 'kolor_p': '#000000', 'r': 1, 'p': 0},
      {'kolor_l': '#000000', 'kolor_p': '#e6e6e6', 'r': 1, 'p': 0},
      {'kolor_l': '#000000', 'kolor_p': '#000000', 'r': 0, 'p': 1},
      {'kolor_l': '#e6e6e6', 'kolor_p': '#e6e6e6', 'r': 1, 'p': 0}]
    Routine przygotowanie
    Routine fixpoint
    Routine trial
    Routine likert1
    Routine odp
    Routine likert2
  LoopTerminator trials
  Routine tlo
  Routine sam_post1
  Routine sam_post2
  Routine koniec
